PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = masculine overcompensation experiment - willer et al. 2013
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine Welcome
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    TextComponent Welcometext
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Dear participant,
        Thank you for taking part in our survey on the topic of gender identity.
        Following you will find some questions about you as a person and your perspective on different statements mainly regarded to your identity.

        We ask you to select the appropriate answers when completing the questionnaire. Please note that we are interested in your personal impression. There are no right or wrong answers. The survey takes about 10 minutes.
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Click here to continue
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        chooseExperiment = random.randint(0, 1)
  Routine Welcome_2
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    TextComponent Welcometext_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Participation in the survey is voluntary. You can revoke your consent to participate in this study at any time and without giving reasons, without incurring any disadvantages. To do so, simply press "Esc".

        All information provided by study participants is treated as strictly confidential and anonymized. The data collected will be used exclusively for scientific purposes.
    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Click here to continue
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  Routine demographics
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    SliderComponent slider_age
      forceEndRoutine = True
      granularity = 1
      labels = '18-24','25-34','35-44','45-54','55-64','65-99'
      letterHeight = 0.02
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    TextComponent textage
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = What is your age?
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  Routine blank_wait
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    TextComponent waittext
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = Please wait a few seconds while we will calculate your gender identity score. It will be shown to you on the next page...
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  Routine trail
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      labels = "Totally disagree", "Totally agree"
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_2
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = "If you start trying to change things very much, you usually make them worse"
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  Routine trial_gender_identity
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 1
      labels = 'Almost Never True', 'Almost Always True'
      letterHeight = 0.02
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent text
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $gender_identity_words
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  Routine blank
    RoutineSettingsComponent blank
      stopVal [duration (s)] = 0.5
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine thank_you
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    TextComponent Thank_you
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
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      text:
        Thank you for taking the time to participate in our study.

        First of all, we need to tell you that we didn´t measure your gender identity score, you were randomly assigned to one of two scores. One groupe which had the "11" as a score, in the average area of masculine, and the other group had the "32" score, in the average area of feminine. We needed to pretend this in order to eventually create an effect of masulinity threat on the participants. Our main goal of this study was to investigate if there are an masculine oversompensation effect resulting from masculinity threat towards group-based dominance and political conservatism.

        We would like to ask you not to discuss the exact aim of the study with people who may still participate, as this could influence the results.

        For any concerns or questions regarding the study please contact the following:
        Name: example name
        Email: example@university
    ButtonComponent button_8
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.33)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Click here to end the experiment
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  Routine trial_group_based_dominance
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    SliderComponent slider_3
      forceEndRoutine = True
      granularity = 1
      labels = 'Almost Never True', 'Almost Always True'
      letterHeight = 0.02
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7,8,9,10)
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    TextComponent text5
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $items_group_based_dominance
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  Routine pretext_gender_identity
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    TextComponent gender_identity_pretext_2
      font = open Sans
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Now we will start with the gender identity survey with which we will calcualte your gender identity on a dimension of masculine to feminine.

        For each of the following words, please rate on the scale how well you think the word describes yourself:
    ButtonComponent button_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Click here to continue
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  Routine pretext_group_based_dom
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    TextComponent pretext_group_based_dominance
      font = open Sans
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Now we will ask you some more general questions about your personality.

        For each of the following statements, please rate on the scale how well you think the statement describes yourself:
    ButtonComponent button_5
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Click here to continue
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  Routine pretext_political_conservatism
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    TextComponent pretext_political_position
      font = open Sans
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Finally we've got some political and societal statements.
        Please rate on the scale what you feel or think about them:
    ButtonComponent button_6
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Click here to continue
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  Routine trial_system_justification_conserv
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    TextComponent text_7
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $items_system_justification
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    SliderComponent slider_5
      forceEndRoutine = True
      granularity = 1
      labels = 'strongly disagree', 'strongly agree'
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7,8 ,9)
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  Routine trial_political_position_conserv
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    SliderComponent slider_4
      forceEndRoutine = True
      granularity = 1
      labels = 'very negative feeling', 'very positive feeling'
      letterHeight = 0.02
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent text_6
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $items_political_position
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  Routine trial_traditionalism_conserv
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    SliderComponent slider_6
      forceEndRoutine = True
      granularity = 1
      labels = 'strongly disagree', 'strongly agree'
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7,8 ,9)
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    TextComponent text_8
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $items_traditionalism
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  Routine pretext_system_justification
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    TextComponent pretext_system
      font = open Sans
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = For each of the following statements, please rate on the scale what you think of them:
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    ButtonComponent button_7
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Click here to continue
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  Routine feedback_score_masculine
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    ImageComponent image
      image [set every repeat] = Feedback_masculine.png
      pos = (0, -0.09)
      size = (1.1, .25)
      startVal [time (s)] = 0.0
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    ButtonComponent button_4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.35)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Click here to continue
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    TextComponent text_masculine
      letterHeight = 0.03
      pos = (0, .25)
      startVal [time (s)] = 0.0
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      text:
        The following is your score on the gender identity survey. It has been placed on a 0 to 50 index running from "Masculine" to "Feminine". Those lower on the scale have more masculine gender identities, those higher on the scale have more feminine gender identities.

        Your Score: 11

        Below is a line graph of average score of men and women on the Gender Identity Survey. We have indicated your score with an "X" on the line.
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if chooseExperiment:
            continueRoutine = False
  Routine feedback_score_feminine
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    ButtonComponent button_9
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.35)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Click here to continue
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    TextComponent text_feminine
      letterHeight = 0.03
      pos = (0, .2)
      startVal [time (s)] = 0.0
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      text:
        The following is your score on the gender identity survey. It has been placed on a 0 to 50 index running from "Masculine" to "Feminine". Those lower on the scale have more masculine gender identities, those higher on the scale have more feminine gender identities.

        Your Score: 32

        Below is a line graph of average score of men and women on the Gender Identity Survey. We have indicated your score with an "X" on the line.
    ImageComponent image_2
      image [set every repeat] = Feedback_feminine.png
      pos = (0, -0.09)
      size = (1.1, .25)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if not chooseExperiment:
            continueRoutine = False
Flow
  Routine Welcome
  Routine Welcome_2
  Routine demographics
  Routine pretext_gender_identity
  LoopInitiator loop_gender_identity loopType="TrialHandler"
    conditionsFile = items_gender_identiity_survey.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'gender_identity_words': 'self-reliant'},
      {'gender_identity_words': 'Yielding'},
      {'gender_identity_words': 'Helpful'},
      {'gender_identity_words': 'Defends own beliefs'},
      {'gender_identity_words': 'Cheerful'},
      {'gender_identity_words': 'Moody'},
      {'gender_identity_words': 'Independent'},
      {'gender_identity_words': 'Shy'},
      {'gender_identity_words': 'Conscientious'},
      {'gender_identity_words': 'Athletic'},
      {'gender_identity_words': 'Affectionate'},
      {'gender_identity_words': 'Theatrical'},
      {'gender_identity_words': 'Assertive'},
      {'gender_identity_words': 'Flatterable'},
      {'gender_identity_words': 'Happy'},
      {'gender_identity_words': 'Strong personality'},
      {'gender_identity_words': 'Loyal'},
      {'gender_identity_words': 'Unpredictable'},
      {'gender_identity_words': 'Forceful'},
      {'gender_identity_words': 'Feminine'},
      {'gender_identity_words': 'Reliable'},
      {'gender_identity_words': 'Analytical'},
      {'gender_identity_words': 'Sympathetic'},
      {'gender_identity_words': 'Jealous'},
      {'gender_identity_words': 'Has leadership abilities'},
      {'gender_identity_words': 'Truthful'},
      {'gender_identity_words': 'Sensitive to the needs of others'},
      {'gender_identity_words': 'Willing to take risks'},
      {'gender_identity_words': 'Understanding'},
      {'gender_identity_words': 'Secretive'},
      {'gender_identity_words': 'Makes decisions easily'},
      {'gender_identity_words': 'Compassionate'},
      {'gender_identity_words': 'Sincere'},
      {'gender_identity_words': 'Self-sufficient'},
      {'gender_identity_words': 'Eager to soothe hurt feelings'},
      {'gender_identity_words': 'Conceited'}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
    Routine trial_gender_identity
  LoopTerminator loop_gender_identity
  Routine blank_wait
  Routine feedback_score_masculine
  Routine feedback_score_feminine
  Routine pretext_group_based_dom
  LoopInitiator loop_group_based_dominance loopType="TrialHandler"
    conditionsFile = items_group_based_dominance.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'items_gropu_based_dominance': 'To get ahead in life, it is sometimes necessary to step on other groups.'},
      {'items_gropu_based_dominance': 'If certain groups of people stayed in their place, we would have fewer problems.'},
      {'items_gropu_based_dominance': 'In getting what your group wants, it is sometimes necessary to use force against other groups.'},
      {'items_gropu_based_dominance': 'Inferior groups should stay in their place.'},
      {'items_gropu_based_dominance': 'Superior groups should dominate inferior groups.'},
      {'items_gropu_based_dominance': 'Some groups of people are just more worthy than others.'},
      {'items_gropu_based_dominance': "It's probably a good thing that certain groups are at the top and other groups are at the bottom."},
      {'items_gropu_based_dominance': 'Sometimes other groups must be kept in their place.'}]
    Routine trial_group_based_dominance
  LoopTerminator loop_group_based_dominance
  Routine pretext_political_conservatism
  LoopInitiator loop_political_position loopType="TrialHandler"
    conditionsFile = items_political_position.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'items_political_position': '"reduced aid to the poor"'},
      {'items_political_position': '"the U.S. military"'},
      {'items_political_position': '"higher taxes on the rich"'},
      {'items_political_position': '"government support for business"'},
      {'items_political_position': '"the death penalty"'},
      {'items_political_position': '"affirmative action"'}]
    Routine trial_political_position_conserv
  LoopTerminator loop_political_position
  LoopInitiator loop_system_justification loopType="TrialHandler"
    conditionsFile = items_system_justification.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'items_system_justification': '"In general, you find society to be fair"'},
      {'items_system_justification': '"In general, the American political system operates as it should"'},
      {'items_system_justification': '"American society needs to be radically restructured"'},
      {'items_system_justification': '"The United States is the best country in the world to live in"'},
      {'items_system_justification': '"Most policies serve the greater good"'},
      {'items_system_justification': '"Everyone has a fair shot at wealth and happiness"'},
      {'items_system_justification': '"Our society is getting worse every year"'},
      {'items_system_justification': '"Society is set up so that people usually get what they deserve"'}]
    Routine trial_system_justification_conserv
  LoopTerminator loop_system_justification
  LoopInitiator loop_traditionalism loopType="TrialHandler"
    conditionsFile = items_traditionalism.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'items_traditionalism': '"If something grows up over a long time there is bound to be much wisdom in it"'},
      {'items_traditionalism': '"If you start trying to change things very much, you usually make them worse"'},
      {'items_traditionalism': '"All groups can live in harmony in this country without changing the system in any way"'},
      {'items_traditionalism': '"You can usually depend more on a man if he owns property than if he does not"'},
      {'items_traditionalism': '"Our society is so complicated that if you try to reform parts of it you´re likely to upset the whole system"'},
      {'items_traditionalism': '"I prefer the practical man anytime to the man of ideas"'},
      {'items_traditionalism': '"A man doesn´t really get to have much wisdom until he´s well along in years"'},
      {'items_traditionalism': '"I need to know that something would really work before I’d be willing to take a chance at it"'},
      {'items_traditionalism': '"No matter how we like to talk about it, political authority comes not from us but from some higher power"'},
      {'items_traditionalism': '"Private ownership of property is necessary if we are to have a strong nation"'},
      {'items_traditionalism': '"It´s never wise to introduce changes rapidly, in government or in the economic system"'},
      {'items_traditionalism': '"It’s better to stick with what you have than to keep trying new uncertain things"'}]
    Routine trial_traditionalism_conserv
  LoopTerminator loop_traditionalism
  Routine thank_you
